load_file("nrngui.hoc")

// create a section call "soma" and 2 dendrites
dend_number = 2
create soma, dend[dend_number]
// access the section "soma"
access soma

// set the properties
// only for the sections you can also use the {} notation
soma {
    nseg = 1
    diam = 18.8
    L = 18.8
    Ra = 100.0
    // insert Hodgkin-Huxley channels
    insert hh
    gnabar_hh = 0.25
    // insert passive channels
    insert pas
}

// first dendrite
// To increase the spatial resolution of the dendrite, we can simply increase the number of compartments
// NOTE: erinnere dich an das Kabel Model (verzweigte Kabelgleichung). nseq entspricht die Feinkörnigkeit
dend[0] {
    nseg = 5
    diam = 3.18
    L = 701.9
    Ra = 100
    insert pas
}
dend[1] {
    nseg = 5 
    diam = 2.0 
    L = 549.1 
    Ra = 100 
    insert pas
}

// Connect things together
connect dend[0](0), soma(0)
connect dend[1](0), soma(1)

// define a variable 
objref electrode
// 0.5 will place a point process i.e. electrode half way between the 0 and 1 end of the "soma" segment
// When we need to refer to specific points along the section we us the section name followed by a number between 0 
// and 1 in parenthesis which represents the distance along the section from the origin. For example, dend[0](0) 
// refers to a point at the proximal end of dendrite 0, dend[0](1) refers to a point at the distal end of dendrite 0, 
// and dend[0](0.2) refers to a point 20% down dendrite 0:
soma electrode = new IClamp(0.5)

// NOTE: Additional point processes can be built into the simulator with the model description language '.mod'

// set the properties of the electrode which gets inserted into the soma
// you HAVE to use the dot notation
// delay "del" because v_init will be close the resting potential but not equal
// --> thats why there will be a set back to the "correct" value in the first ms of the simulation
soma electrode.del = 100
soma electrode.dur = 100
soma electrode.amp = 0.5

// run the simulation for 300ms
tstop = 300
// print the results to the console
print "V = ", soma.v, "mV"

// forall psection()
